OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.7.0)

GDF file reader => #0
  Filename = C:/Users/RAAG0206/Downloads/B0101T.gdf
  Samples per buffer = 32
#0.EEG stream -> Channel Selector "1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter => #2
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 30
Data=#2 -> Signal display "Filtered"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#2 -> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
-> Spectral Analysis => #5
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#5.Amplitude -> Frequency Band Selector
  Frequencies to select = 12:30
-> Spectrum Average => #7
  Considers zeros = false
#5.Amplitude -> Frequency Band Selector
  Frequencies to select = 4:8
-> Spectrum Average => #9
  Considers zeros = false
Input - A=#7, Input - B=#9 -> Simple DSP "Beta/Theta" => #10
  Equation = A/B
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#10 -> Threshold Crossing Detector => #12
  Threshold = 0.5
  Cross over threshold = 33031
  Cross under threshold = 33032
  Channel Index = 1
Input stimulations=#12 -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
