OpenViBE-Scenario(FormatVersion=2, Creator=Antigravity (Signal Viewer), CreatorVersion=3.5.0)

Noise generator (Testing)
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
  Noise type = Uniform
-> Channel Selector "1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter => #2
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 30
Data=#2 -> Signal display "Filtered"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#2 -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
